PsychoPy2experiment version="2020.1.3"
Settings
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLSe-JyQOJB2rcwl0jYrK_pOr_J8RNK4YRzq_I4WmRa4Pfox_aA/viewform?usp=sf_link
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['Azonosító kód*'],'pilot', expName, expInfo['date'])
  Experiment info = {'Azonosító kód*': '', 'A vizsgálat feltételeibe beleegyezem. (igen/nem)*': '', 'Az adatkezelési feltételeket elfogadom. (igen/nem)*': ''}
  Full-screen window = True
  Monitor = AOC
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.804,0.804,0.961]
  expName = TRK-online
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Routines
  Routine inter_task_break
    TextComponent inter_task_break_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1195.0
      text = Ha úgy érzi készen áll, nyomja le a jobb nyilat.
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    TextComponent inter_task_break_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      text = Mielőtt tovább lépne a következő feladathoz, tartson egy rövid szünetet, hogy felfrissüljön. Ha teheti, álljon fel a számítógéptől, pihentesse szemeit, igyon egy pohár vizet. Ügyeljen, hogy ez a szünet ne tartson 10 percnél tovább. 
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    KeyboardComponent inter_task_break_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1195
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  Routine start_encoding
    TextComponent start_encoding_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        Első feladat
        Galéria berendezés
    CodeComponent select_encoding_trials
      Code Type = Both
      Begin Experiment:
        tables = [0,1,2]
        shuffle(tables)
        trial_table = tables.pop()
        print('selected file {}'.format(trial_table))
        trial_table = str(trial_table)
        stimuli_table = 'stimuli_tables/encoding_trials_'+ trial_table + '.csv'
      Begin JS Experiment:
        tables = ["0","1","2"];
        trial_table = tables[Math.floor(Math.random() * tables.length)];
        stimuli_table = (("stimuli_tables/encoding_trials_" + trial_table) + ".csv");
    CodeComponent encoding_run_setup
      Code Type = Auto->JS
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      Begin Routine:
        start = 0
        end = 0
        step = 1
        n_runs = 3
        run_counter = 0
  Routine start_recognition
    CodeComponent recognition_run_setup
      Code Type = Auto->JS
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      Begin Routine:
        start = 0
        end = 0
        step = 1
        n_runs = 4
        run_counter = 0
    CodeComponent select_recognition_trials
      Code Type = Auto->JS
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      Begin Routine:
        stimuli_table = 'stimuli_tables/recognition_trials_'+ trial_table + '.csv'
    TextComponent start_recognition_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Második feladat
        Képfelismerés
  Routine start_enc_run
    CodeComponent create_enc_run
      Code Type = Both
      Begin JS Routine:
        start = end;
        end = (start + 84);
        selection = Array.from({length: end - start}, (_, index) => index + start)
      Begin Routine:
        start = end
        end = start + 3
        selection = np.arange(start, end, step)
    CodeComponent enc_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Rövid szünet\nA feladat folytatáshoz nyomja le a jobb nyilat'

        if run_counter >= 3:
            end_run_text = 'Vége az első feladatnak. A folytatáshoz nyomja le a jobb nyilat'
    TextComponent start_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Kezdődik a feladat...
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  Routine enc_trial
    ImageComponent enc_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_trial_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine consent
    TextComponent consent_text
      color = black
      disabled = True
      letterHeight = 0.022
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A tervezett vizsgálattal kapcsolatban minden számomra fontos információt megkaptam, a tájékoztatót elolvastam. A vizsgálatban önszántamból, saját felelősségemre veszek részt.

        Kérjük, olvassa el az alábbi állításokat! Amennyiben egyetért velük, haladjon tovább a jobb nyíllal.

            • Tudomásul veszem, hogy a kísérlet anonim, és semmilyen, személyem azonosítására alkalmas adat rögzítésére nem kerül sor.

            • Tudomásul veszem, hogy a kitöltés bármikor, indoklás nélkül, akár végleg is megszakítható, és ebben az esetben a megadott adatok nem kerülnek feldolgozásra.

            • Tudomásul veszem, hogy adataimat a 2018. május 25-től hatályos 2016/679/EU Európai Unió általános adatvédelmi irányelvét és a magyarországi jogszabályokat (2011. évi CXII. adatvédelmi tv.) is betartva fogják kezelni.

            • Hozzájárulok ahhoz, hogy a vizsgálathoz szükséges személyes adataimat, valamint a vizsgálat során rólam nyert adatokat a kísérletet végzők egymástól elkülönítve rögzítsék, azokat egymástól elkülönítve, elektronikus úton tárolják, és kutatási célból felhasználják, úgy, hogy harmadik fél részére személyem azonosítására alkalmas információt nem szolgáltatnak ki.

            • Hozzájárulok, hogy a vizsgálat során megadott válaszaimat és böngészőm információit a https://pavlovia.org/ (Pavlovia) szervere tárolja.

            • Hozzájárulok, hogy anonimizált, személyes beazonosításomra nem alkalmas adataimat a tudományos közösséggel megosszák a https://osf.io/ (Open Science Foundation [magyarul: Nyílt Tudomány Alapítvány]) és a https://openneuro.org/ (OpenNeuro) szerverein.

            • Megértettem, hogy a vizsgálat végén kapott egyedi kóddal tudom igazolni, hogy a vizsgálatot elvégeztem. Az egyedi kód megadásával válok a kompenzációra jogosulttá.

        Elolvastam és megértettem a felsorolt állításokat.
    KeyboardComponent consent_key
      allowedKeys = 'right'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295
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    TextComponent consent_continue
      color = black
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine info
  Routine lab_introduction
    TextComponent lab_thanks
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
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      text:
        Köszönjük, hogy hozzájárul kutatócsoportunk munkájához azzal, hogy részt vesz vizsgálatunkban!
    KeyboardComponent lab_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent lab_introduction_continue
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 119.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    ImageComponent lab_members
      image = stimuli/lab_members.jpg
      pos = (0, -0.3704)
      size = (0.9458, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      units = norm
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    CodeComponent get_size
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = Window.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
  Routine enc_instructions_1
    TextComponent enc_instructions_1_text
      color = black
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.65
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      text:
        Ön ennek a modern képgalériának a kurátora.

        A legújabb kiállításra a vártnál több kép érkezett.
        Kurátorként az Ön feladata lesz eldönteni, mely képeket válogatjuk be a kiállított darabok közé, és hogy a kép illeszkedik-e a galéria adott pontjára.

        Az Ön ideje nagyon drága a galériának, így a döntésre egy-egy képről csak 3 másodperce lesz.
    ImageComponent enc_instructions_1_image
      image = stimuli/GalleryBuildingFromOutside.jpg
      pos = (0.4688, 0.0)
      size = (0.625, 0.8333)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_1_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_1_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine enc_instructions_2
    TextComponent enc_instructions_2_text
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.5
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      text:
        Ez a kiállítóterem, nézze meg figyelmesen.

        A feladat során a képek a falra vetítve jelennek meg, azon a helyen, ahol kiállításra kerülhetnek. A képek előtt egy keresztet fog látni, ami jelzi a képek pontos helyét.

        Döntse el a képekről, hogy ki legyenek-e állítva a bemutatott helyen. A beválogatott képek száma nincsen korlátozva. Minden egyes képről Ön dönt. Ha több képet válogat be, mint amennyi a galériában elfér, akkor a képeket az év során felváltva állítjuk ki.

        Minden képet nézzen meg figyelmesen, és minden képre adjon választ.
    ImageComponent enc_instructions_2_image
      image = stimuli/GalleryInterior.png
      pos = (0.4427, 0)
      size = (0.7604, 0.8185)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_2_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_2_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine enc_fx
    ImageComponent enc_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_fx_key
      allowedKeys = 'f', 'j'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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  Routine start_rec_run
    CodeComponent rec_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Szünet\nA feladat folytatáshoz nyomja le a jobb nyilat'

        if run_counter >= n_runs:
            end_run_text = 'Vége a második feladatnak. Felteszünk Önnek pár kérdést, majd megkapja a vizsgálat befejezését igazoló kódot.\nHaladjon tovább a jobb nyíllal.'
    TextComponent start_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a feladat...
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  Routine end_rec_run
    TextComponent end_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $end_run_text
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    KeyboardComponent end_rec_run_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine rec_fx
    ImageComponent rec_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent rec_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent rec_fx_key
      allowedKeys = 'f','j'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent rec_fx_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent rec_fx_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Jitter/1000
      text = [F - Régi]      [J - Új]
      units = norm
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  Routine rec_trial
    ImageComponent rec_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    ImageComponent rec_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    KeyboardComponent rec_trial_key
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent rec_trial_text_block
      color = black
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent rec_trial_instructions_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = [F - Régi]      [J - Új]
      units = norm
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  Routine rec_instructions_1
    TextComponent rec_instructions_1_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A következő feladatban ismét absztrakt képeket fog látni, és ezekről kell eldöntenie, látta-e őket az első, 'Galéria berendezés' feladataban, és hogy ugyanott látta-e őket.

        A feladatot két alfeladatra bontottuk. Az egyikben a képekről, a másikban a képek pozíciójáról kell döntenie.
    KeyboardComponent rec_instructions_1_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent rec_instructions_1_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine rec_instructions_2
    TextComponent rec_instructions2_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 1
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      text:
        A Kép nevű alfeladatban azt kell eldöntenie, látta-e már ezeket a képeket a 'Galéria berendezés' feladataban.

        Két csoportba oszthatóak a megjelenő képek:
         - Régi: Ezek a képek pontosan megegyeznek a 'Galéria berendezés' feladatban látott képek egyikével.
         - Új: Képek, amelyek nem jelentek meg a 'Galéria berendezés' feladatban. Ezek a képek lehetnek hasonlóak a korábban látottakhoz.

        Az Ön feladata, hogy eldöntse, melyik kép ugyanaz, mint a 'Galéria berendezés' feladatban, és melyik új.
        A döntésre 4 másodperce lesz.
        Minden képet nézzen meg figyelmesen, és minden képre adjon választ, akkor is, ha a döntés nehéz.

        Döntését így jelölje:
        Régi - F
        Új - J
    KeyboardComponent rec_instructions_2_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent rec_instructions_2_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent rec_instruction_2_title
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Kép' alfeladat
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  Routine enc_instructions_3
    TextComponent enc_instructions_3_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Az első feladat nagyjából 25 percet vesz igénybe, közben két rövid szünettel. Ügyeljen, hogy ezek a szünetek ne legyenek 2 percnél hosszabbak.

        A 'J' billentyűvel jelölje azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen.

        Az 'F' billentyűvel jelölje a képeket, amelyek nem maradnak kiállítva a bemutatott helyen.

        Most a gyakorló feladat következik.
    KeyboardComponent enc_instructions_3_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295
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    TextComponent enc_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = Ha készen áll a gyakorlásra, nyomja le a jobb nyilat.
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  Routine start_practice
    TextComponent start_practice_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a gyakorlás...
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  Routine end_practice
    TextComponent end_practice_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.8
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      text:
        Ez volt a gyakorlás. A feladat következik.
        A feladat során már nem kap visszajelzést a döntéséről.
    KeyboardComponent end_practice_key
      allowedKeys = 'right', 'left'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    CodeComponent end_practice_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        block_counter = 0
    TextComponent end_practice_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine enc_practice_feedback
    CodeComponent enc_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        response = enc_trial_key.keys
        feedback_text = ''
        if response == 'f':
            feedback_text = 'Az Ön válasza:\nA kép nem marad.'
        elif response == 'j':
            feedback_text = 'Az Ön válasza:\nA kép marad.'
        else:
            feedback_text = 'Nem adott választ.'
    ImageComponent enc_practice_feedback_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    ImageComponent enc_practice_feedback_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    TextComponent enc_practice_feedback_text
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (CurrentX, CurrentY - 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
      units = norm
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  Routine end_enc_run
    TextComponent end_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200
      text [set every repeat] = $end_run_text
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    KeyboardComponent enc_run_end_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200
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  Routine rec_instructions_3
    TextComponent rec_instrauction_3_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 1
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      text:
        A Hely nevű alfeladatban azt kell eldöntenie, a képek a képernyő ugyanazon pontján jelennek-e meg, mint a 'Galéria berendezés' feladataban.
        Ebben az alfeladatban minden kép pontos mása annak, amit az első feladatban látott.

        A helyek azonban két csoportba oszthatóak:
         - Régi: Pontosan ugyanitt jelent meg ez a kép a 'Galéria berendezés' feladatban.
         - Új: Egy másik helyen jelent meg ez a kép a 'Galéria berendezés' feladatban. Ez a hely lehet közeli az eredeti helyhez.

        Az Ön feladata, hogy eldöntse, melyik kép jelent meg ugyanott, és melyik új helyen.
        A döntésre 4 másodperce lesz.
        Minden képet nézzen meg figyelmesen, és minden képre adjon választ, akkor is, ha a döntés nehéz.

        A döntését így jelölje:
        Régi - F
        Új - J
    KeyboardComponent rec_instructions_3_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5
      stopVal [duration (s)] = 295
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    TextComponent rec_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent rec_instruction_3_title
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Hely' alfeladat
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  Routine rec_instructions_4
    TextComponent rec_instructions_4_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A következőkben pár példával mutatjuk be Önnek, milyen hasonlóak lehetnek az új képek és helyek.

        A bemutatóban elsőként egy, a 'Galéria berendezés' feladat során már látott képet/helyet mutatunk Önnek, 'Régi' felirattal.
        A régi képet/helyet mindig egy új kép/hely követi a bemutatóban, 'Új' felirattal.
    KeyboardComponent rec_instructions_4_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent rec_instructions_4_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine demo
    ImageComponent demo_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    ImageComponent demo_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    ImageComponent demo_image
      image [set every repeat] = $DemoImage
      pos [set every repeat] = (DemoX, DemoY)
      size = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    TextComponent demo_text
      color = black
      letterHeight = 0.05
      pos = (-0.025, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $DemoText
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    KeyboardComponent demo_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 298
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    TextComponent demo_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 298.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine demo_end
    TextComponent demo_end_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Ez volt a bemutató. Most a gyakorlás következik.
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    KeyboardComponent demo_end_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent demo_end_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine start_rec_block
    CodeComponent start_block_code
      Code Type = Both
      Begin JS Routine:
        start = end;
        end = (start + 18);
        selection = Array.from({length: end - start}, (_, index) => index + start)
        if ((block_counter === 0)) {
            block_name = "K\u00e9p";
        } else {
            if ((TrialType === "LOC")) {
                block_name = "K\u00e9p";
            } else {
                block_name = "Hely";
            }
        }
        block_counter = (block_counter + 1);
      Begin Routine:
        start = end
        end = start + 3
        selection = np.arange(start,end, step)
        if block_counter == 0:
            block_name = "Kép"
        else:
            if TrialType == "LOC":
                block_name = "Kép"
            else:
                block_name = "Hely"
        block_counter = block_counter + 1
    TextComponent start_rec_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $block_name
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  Routine start_rec_block_3
  Routine start_rec_block_2
  Routine start_rec_practice_block
    CodeComponent start_rec_practice_code
      Code Type = Both
      Begin Experiment:
        rec_practice_block = [0,1,2]
        block_name = "Kép"
        block_counter = 0
      Begin JS Experiment:
        rec_practice_block = [0, 1, 2];
        block_name = "K\u00e9p";
        block_counter = 0;
      Begin JS Routine:
        block_counter = (block_counter + 1);
        if ((block_counter >= 2)) {
            rec_practice_block = [3, 4, 5];
            block_name = "Hely";
        }
      Begin Routine:
        block_counter = block_counter + 1
        if block_counter >= 2:
            rec_practice_block = [3,4,5]
            block_name = "Hely"
    TextComponent rec_practice_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
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  Routine rec_practice_feedback
    CodeComponent rec_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        correct_response = ''
        if StimType == 'FOIL':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'LURE':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'TARGET':
            correct_response = 'A helyes válasz: Régi'

        response = ''
        if rec_trial_key.keys == 'f':
            response = 'Az Ön válasza: Régi'

        elif rec_trial_key.keys == 'j':
            response = 'Az Ön válasza: Új'

        feedback_text = correct_response +'\n'+ response
    TextComponent rec_practice_feedback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
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  Routine data_protection
    TextComponent data_protection_text
      color = black
      disabled = True
      letterHeight = 0.022
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Köszönjük, hogy hozzájárul kutatócsoportunk munkájához azzal, hogy részt vesz vizsgálatunkban.

        A vizsgálat során a fentebb leírt feladatra adott válaszai mellett a következő adatok kerülnek rögzítésre: nem, kor, oktatás éve. Ezen adatok szolgáltatása a vizsgálat előfeltétele.

        A kísérlet anonim, és semmilyen, az Ön személyének azonosítására alkalmas adat rögzítésére nem kerül sor. Anonim adatait szeretnénk megosztani a tudományos közösséggel, hogy azokat más kutatók is fel tudják majd használni elemzéseikben, kutatásaikban. Ezzel értékes információt és időt nyerhet a világ tudományos közössége. Az adatok kezelésével és a titoktartással kapcsolatban bővebb információt az Adatkezelés nevű dokumentumunkban olvashat.

        A vizsgálat online végezhető el, a Pavlovia (https://pavlovia.org/) online kísérleti felületén. A résztvevők a vizsgálat végén kapott egyedi kód későbbi bemutatásával válnak a kompenzációra jogosulttá.

        Ez az egyedi kód csak azzal az információval lesz összekapcsolva, hogy Ön elvégezte a kísérletet; a megadott adatai közül (nem, kor, okatatás éve) egyik sem lesz e kódhoz hozzárendelve semmilyen adatbázisban. A vizsgálat befejeztével lehetősége nyílik egy online űrlap kitöltésére, ahol az egyedi kódja illetve az e-mail címe megadását fogjuk kérni Öntől. A megadott email címre fogjuk elküldeni a kompenzációt.
    KeyboardComponent data_protection_key
      allowedKeys = 'right'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent data_procetion_continue
      color = black
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine experiment_information
    TextComponent experiment_information_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Kérjük, figyelmesen olvassa végig az alábbi instrukciókat!

        A vizsgálathoz használjon asztali számítógépet vagy laptopot. A vizsgálat nem végezhető el mobil eszközön, például okostelefonon vagy táblagépen. A feladatok elvégzéséhez szüksége lesz működő billentyűzetre és stabil internet kapcsolatra. Az optimális eredmény elérése érdekében Google Chrome, Firefox vagy Safari böngésző használata javasolt. Kérjük, használja a teljes képernyő módot.
        A kísérlet teljes körű, zavartalan figyelmet igényel. A vizsgálat két feladatból áll, és elvégzése 50-60 percet vesz igénybe. Bizonyosodjon meg róla, hogy elég időt tud szánni a vizsgálatra. Ügyeljen arra, hogy telefont, vagy más eszközöket közben ne használjon, és kerülje a másokkal való interakciót.

        A vizsgálat két feladatból áll, melyek során absztrakt képeket kell kiválogatnia a megadott szempontok szerint. A feladatok alatt és a feladatok között is lesz lehetősége rövid pihenőt tartani.
    KeyboardComponent experiment_information_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent experiment_information_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    CodeComponent consent_check
      Code Type = Auto->JS
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      Begin Experiment:
        proceed = False
        consent = expInfo['A vizsgálat feltételeibe beleegyezem. (igen/nem)*']
        dataprotection = expInfo['Az adatkezelési feltételeket elfogadom. (igen/nem)*']
        consent_ok = False
        data_ok = False

        if consent == 'igen' or consent == 'i' or consent == 'Igen' or consent == 'I':
            consent_ok = True

        if dataprotection == 'igen' or dataprotection == 'i' or dataprotection == 'Igen' or dataprotection == 'I':
            data_ok = True

        if consent_ok & data_ok:
            proceed = True

        if not proceed:
            core.quit()
  Routine comprehension_question
    TextComponent comprehension_question_text
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $Question
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    TextComponent comprehension_question_answers
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $Answer
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    KeyboardComponent comprehension_key
      allowedKeys = 'd','f','j','k'
      correctAns = $CorrectResponse
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      store = first key
      storeCorrect = True
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  Routine comprehension_feedback
    CodeComponent check_answer
      Code Type = Auto->JS
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      Begin Routine:
        comprehension_repeat = 300.0
        comprehension_feedback = IncorrectAnswer
        if comprehension_key.corr==1:
            comprehension_repeat = 0.0
            comprehension_feedback = CorrectAnswer
    TextComponent comprehension_feedback_text
      color = black
      letterHeight = 0.06
      pos = (0, 0.0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $comprehension_feedback
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  Routine end_experiment
    TextComponent end_experiment_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Köszönjük a részvételt!

        Jegyezze fel az alábbi kódot, amellyel a részvételét igazolja:
    CodeComponent generate_participant_code
      Code Type = Both
      Begin Experiment:
        code = np.random.randint(100000, high=999999)
      Begin JS Experiment:
        code = Math.floor(100000 + Math.random() * 900000)
    TextComponent end_experiment_code
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $code
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    TextComponent end_experiment_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 297.0
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      text:
        A jobb nyíl lenyomásával megjelenik a vizsgálat végét jelző üzenet. Ezt fogadja el az OK gombbal, majd átirányítjuk egy felületre, ahol a kód megadásával igazolni tudja a részvételét.
        Probléma esetén írjon nekünk a terkep@ttk.hu email címen.
    KeyboardComponent end_experiment_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 294.0
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  Routine comprehension_repeat
    KeyboardComponent comprehension_continue_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $comprehension_repeat
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    TextComponent comprehension_continue_text
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $comprehension_repeat
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent comprehension_repeat_text
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $comprehension_repeat
      text [set every repeat] = $InfoRepeated
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  Routine demo_start
    TextComponent demo_start_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Kezdődik a bemutató...
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Flow
  Routine experiment_information
  LoopInitiator comprehension_questions_1 loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = stimuli_tables/comprehension_questions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question', 'Mennyi időt vesz igénybe a vizsgálat? Válaszát jelölje a megadott billentyűk egyikével. '), ('Answer', 'D:20-30 perc    F: 50-60 perc    J: 70-80 perc'), ('CorrectResponse', 'b'), ('CorrectAnswer', 'A helyes válasz: 50-60 perc')]),
      OrderedDict([('Question', 'Megbizonyosodott róla, hogy biztosítottak a vizsgálat elvégzéséhez szükséges feltételek? Válaszát jelölje a megadott billentyűk egyikével. '), ('Answer', 'D: Igen, körülményeim nyugodtak, az internet kapcsolat stabil, a feladatokra tudok szánni 60 percet.    F: Nem, nincs lehetőségem nyugodt körülmények között elvégezni a feladatot.'), ('CorrectResponse', 'd'), ('CorrectAnswer', 'Köszönjük!')]),
      OrderedDict([('Question', 'Mely billentyű jelzi azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen?'), ('Answer', 'D billentyű    F billentyű   J billentyű    K billentyű'), ('CorrectResponse', 'j'), ('CorrectAnswer', 'A helyes válasz: J billentyű.')]),
      OrderedDict([('Question', 'Mely billentyű jelzi azokat a képeket, amelyek nem maradhatnak a bemutatott helyen?'), ('Answer', 'D billentyű    F billentyű   J billentyű    K billentyű'), ('CorrectResponse', 'f'), ('CorrectAnswer', 'A helyes válasz: F billentyű')]),
      OrderedDict([('Question', 'Hány másodperce lesz a döntésre egy-egy képről?'), ('Answer', 'D: 2mp    F: 3mp J: 4mp   K: 5mp'), ('CorrectResponse', 'f'), ('CorrectAnswer', 'A helyes válasz 3 mp. ')])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
    Routine comprehension_question
    Routine comprehension_feedback
    Routine comprehension_repeat
  LoopTerminator comprehension_questions_1
  Routine data_protection
  Routine consent
  Routine lab_introduction
  Routine start_encoding
  Routine enc_instructions_1
  Routine enc_instructions_2
  Routine enc_instructions_3
  LoopInitiator comprehension_questions_2 loopType="TrialHandler"
    Selected rows = 2:4
    conditionsFile = stimuli_tables/comprehension_questions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Question', 'Mennyi időt vesz igénybe a vizsgálat? Válaszát jelölje a megadott billentyűk egyikével. '), ('Answer', 'D:20-30 perc    F: 50-60 perc    J: 70-80 perc'), ('CorrectResponse', 'b'), ('CorrectAnswer', 'A helyes válasz: 50-60 perc')]),
      OrderedDict([('Question', 'Megbizonyosodott róla, hogy biztosítottak a vizsgálat elvégzéséhez szükséges feltételek? Válaszát jelölje a megadott billentyűk egyikével. '), ('Answer', 'D: Igen, körülményeim nyugodtak, az internet kapcsolat stabil, a feladatokra tudok szánni 60 percet.    F: Nem, nincs lehetőségem nyugodt körülmények között elvégezni a feladatot.'), ('CorrectResponse', 'd'), ('CorrectAnswer', 'Köszönjük!')]),
      OrderedDict([('Question', 'Mely billentyű jelzi azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen?'), ('Answer', 'D billentyű    F billentyű   J billentyű    K billentyű'), ('CorrectResponse', 'j'), ('CorrectAnswer', 'A helyes válasz: J billentyű.')]),
      OrderedDict([('Question', 'Mely billentyű jelzi azokat a képeket, amelyek nem maradhatnak a bemutatott helyen?'), ('Answer', 'D billentyű    F billentyű   J billentyű    K billentyű'), ('CorrectResponse', 'f'), ('CorrectAnswer', 'A helyes válasz: F billentyű')]),
      OrderedDict([('Question', 'Hány másodperce lesz a döntésre egy-egy képről?'), ('Answer', 'D: 2mp    F: 3mp J: 4mp   K: 5mp'), ('CorrectResponse', 'f'), ('CorrectAnswer', 'A helyes válasz 3 mp. ')])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
    Routine comprehension_question
    Routine comprehension_feedback
    Routine comprehension_repeat
  LoopTerminator comprehension_questions_2
  Routine start_practice
  LoopInitiator enc_practice_trials loopType="TrialHandler"
    conditionsFile = stimuli_tables/encoding_practice_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Task', 'EncodingPractice'), ('TrialType', 'LOC'), ('StimType', 'TARGET'), ('Order', 1), ('CurrentImage', 'stimuli/fractals/166a.jpg'), ('CurrentX', -300.0), ('CurrentY', 0.0), ('Jitter', 1500), ('Section', 'Encoding')]),
      OrderedDict([('Task', 'EncodingPractice'), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('CurrentImage', 'stimuli/fractals/167a.jpg'), ('CurrentX', 300.0), ('CurrentY', 0.0), ('Jitter', 500), ('Section', 'Encoding')]),
      OrderedDict([('Task', 'EncodingPractice'), ('TrialType', 'LOC'), ('StimType', 'FOIL'), ('Order', 1), ('CurrentImage', 'stimuli/fractals/148b.jpg'), ('CurrentX', 212.1320344), ('CurrentY', 212.1320344), ('Jitter', 1000), ('Section', 'Encoding')]),
      OrderedDict([('Task', 'EncodingPractice'), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('CurrentImage', 'stimuli/fractals/159a.jpg'), ('CurrentX', 0.0), ('CurrentY', 300.0), ('Jitter', 5000), ('Section', 'Encoding')]),
      OrderedDict([('Task', 'EncodingPractice'), ('TrialType', '-'), ('StimType', '-'), ('Order', 1), ('CurrentImage', 'stimuli/fractals/177b.jpg'), ('CurrentX', 300.0), ('CurrentY', 0.0), ('Jitter', 800), ('Section', 'Encoding')])]
    Routine enc_fx
    Routine enc_trial
    Routine enc_practice_feedback
  LoopTerminator enc_practice_trials
  Routine end_practice
  LoopInitiator enc_runs loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine start_enc_run
    LoopInitiator enc_trials loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = $stimuli_table
      loopType = sequential
      nReps = 1
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      Routine enc_fx
      Routine enc_trial
    LoopTerminator enc_trials
    LoopInitiator comprehension_enc_run loopType="TrialHandler"
      Selected rows = 4:6
      conditionsFile = stimuli_tables/comprehension_questions.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Question', 'Mennyi időt vesz igénybe a vizsgálat? Válaszát jelölje a megadott billentyűk egyikével. '), ('Answer', 'D:20-30 perc    F: 50-60 perc    J: 70-80 perc'), ('CorrectResponse', 'b'), ('CorrectAnswer', 'A helyes válasz: 50-60 perc'), ('IncorrectAnswer', 'A helyes válasz: 50-60 perc'), ('InfoRepeated', 'Kérjük, figyelmesen olvassa végig az alábbi instrukciókat!\n\nA vizsgálathoz használjon asztali számítógépet vagy laptopot. A vizsgálat nem végezhető el mobil eszközön, például okostelefonon vagy táblagépen. A feladatok elvégzéséhez szüksége lesz működő billentyűzetre és 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,
        OrderedDict([('Question', 'Megbizonyosodott róla, hogy biztosítottak a vizsgálat elvégzéséhez szükséges feltételek? Válaszát jelölje a megadott billentyűk egyikével. '), ('Answer', 'S: Nem, nincs lehetőségem nyugodt körülmények között elvégezni a feladatot.    D: Igen, körülményeim nyugodtak, az internet kapcsolat stabil, a feladatokra tudok szánni 60 percet.'), ('CorrectResponse', 'd'), ('CorrectAnswer', 'Köszönjük!'), ('IncorrectAnswer', 'Bizonyosodjon meg róla, hogy elég időt tud a vizsgálatra szánni. '), ('InfoRepeated', 'Kérjük, figyelmesen olvassa végig az alábbi instrukciókat!\n\nA vizs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,
        OrderedDict([('Question', 'Mely billentyű jelzi azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen?'), ('Answer', 'D billentyű    F billentyű   J billentyű    K billentyű'), ('CorrectResponse', 'j'), ('CorrectAnswer', 'A helyes válasz: J billentyű.'), ('IncorrectAnswer', 'A helyes válasz: J billentyű.'), ('InfoRepeated', "Az első feladat nagyjából 20 percet vesz igénybe, közben két rövid szünettel. Ügyeljen, hogy ezek a szünetek ne legyenek 2 percnél hosszabbak. \n\nA 'J' billentyűvel jelölje azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen.\n\nAz 'F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,
        OrderedDict([('Question', 'Mely billentyű jelzi azokat a képeket, amelyek nem maradhatnak a bemutatott helyen?'), ('Answer', 'D billentyű    F billentyű   J billentyű    K billentyű'), ('CorrectResponse', 'f'), ('CorrectAnswer', 'A helyes válasz: F billentyű'), ('IncorrectAnswer', 'A helyes válasz: F billentyű'), ('InfoRepeated', "Az első feladat nagyjából 20 percet vesz igénybe, közben két rövid szünettel. Ügyeljen, hogy ezek a szünetek ne legyenek 2 percnél hosszabbak. \n\nA 'J' billentyűvel jelölje azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen.\n\nAz 'F' billentyűv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
      Routine comprehension_question
      Routine comprehension_feedback
      Routine comprehension_repeat
    LoopTerminator comprehension_enc_run
    Routine end_enc_run
  LoopTerminator enc_runs
  Routine inter_task_break
  Routine start_recognition
  Routine rec_instructions_1
  Routine rec_instructions_2
  Routine rec_instructions_3
  Routine rec_instructions_4
  LoopInitiator comprehension_questions_3 loopType="TrialHandler"
    Selected rows = 6:8
    conditionsFile = stimuli_tables/comprehension_questions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine comprehension_question
    Routine comprehension_feedback
    Routine comprehension_repeat
  LoopTerminator comprehension_questions_3
  Routine demo_start
  LoopInitiator demo_trials loopType="TrialHandler"
    conditionsFile = stimuli_tables/stimuli_demo.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/149a.jpg'), ('DemoImage', 'stimuli/fractals/149b.jpg'), ('CurrentX', 300.0), ('CurrentY', 0.0), ('DemoX', -300.0), ('DemoY', 0.0), ('InPractice', '-'), ('DemoText', 'Hasonló Képek'), ('Jitter', 1000)]),
      OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/181b.jpg'), ('DemoImage', 'stimuli/fractals/181c.jpg'), ('CurrentX', 300.0), ('CurrentY', 0.0), ('DemoX', -300.0), ('DemoY', 0.0), ('InPractice', '-'), ('DemoText', 'Hasonló Képek'), ('Jitter', 2300)]),
      OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/177b.jpg'), ('DemoImage', 'stimuli/fractals/177c.jpg'), ('CurrentX', 300.0), ('CurrentY', 0.0), ('DemoX', -300.0), ('DemoY', 0.0), ('InPractice', '-'), ('DemoText', 'Hasonló Képek'), ('Jitter', 800)]),
      OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/167a.jpg'), ('DemoImage', 'stimuli/fractals/167b.jpg'), ('CurrentX', 300.0), ('CurrentY', 0.0), ('DemoX', -300.0), ('DemoY', 0.0), ('InPractice', 'OBJ-TARGET'), ('DemoText', 'Hasonló Képek'), ('Jitter', 1500)])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
    Routine demo
  LoopTerminator demo_trials
  Routine demo_end
  Routine start_practice
  LoopInitiator rec_practice_blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine start_rec_practice_block
    LoopInitiator rec_practice_trials loopType="TrialHandler"
      Selected rows = $rec_practice_block
      conditionsFile = stimuli_tables/recognition_practice_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('CurrentImage', 'stimuli/fractals/156b.jpg'), ('CurrentX', 212.1320344), ('CurrentY', 212.1320344), ('Jitter', 0.6), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/166c.jpg'), ('CurrentX', -300.0), ('CurrentY', 0.0), ('Jitter', 0.6), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 2), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('CurrentImage', 'stimuli/fractals/167a.jpg'), ('CurrentX', 0.0), ('CurrentY', 300.0), ('Jitter', 2.0), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 4), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/159a.jpg'), ('CurrentX', 212.1320344), ('CurrentY', 212.1320344), ('Jitter', 1.0), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 5), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'FOIL'), ('CurrentImage', 'stimuli/fractals/148b.jpg'), ('CurrentX', -212.1320344), ('CurrentY', -212.1320344), ('Jitter', 1.5), ('Filler', 0)])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
      Routine rec_fx
      Routine rec_trial
      Routine rec_practice_feedback
    LoopTerminator rec_practice_trials
  LoopTerminator rec_practice_blocks
  Routine end_practice
  LoopInitiator rec_runs loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 4
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    Routine start_rec_run
    LoopInitiator rec_blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine start_rec_block
      LoopInitiator rec_trials loopType="TrialHandler"
        Selected rows = $selection
        conditionsFile = $stimuli_table
        loopType = sequential
        nReps = 1
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        Routine rec_fx
        Routine rec_trial
      LoopTerminator rec_trials
    LoopTerminator rec_blocks
    Routine end_rec_run
  LoopTerminator rec_runs
  LoopInitiator comprehension_end loopType="TrialHandler"
    Selected rows = 8:11
    conditionsFile = stimuli_tables/comprehension_questions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question', 'Mennyi időt vesz igénybe a vizsgálat? Válaszát jelölje a megadott billentyűk egyikével. '), ('Answer', 'D:20-30 perc    F: 50-60 perc    J: 70-80 perc'), ('CorrectResponse', 'f'), ('CorrectAnswer', 'A helyes válasz: 50-60 perc'), ('IncorrectAnswer', 'A helyes válasz: 50-60 perc'), ('InfoRepeated', 'Kérjük, figyelmesen olvassa végig az alábbi instrukciókat!\n\nA vizsgálathoz használjon asztali számítógépet vagy laptopot. A vizsgálat nem végezhető el mobil eszközön, például okostelefonon vagy táblagépen. A feladatok elvégzéséhez szüksége lesz működő billentyűzetre és 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,
      OrderedDict([('Question', 'Megbizonyosodott róla, hogy biztosítottak a vizsgálat elvégzéséhez szükséges feltételek? Válaszát jelölje a megadott billentyűk egyikével. '), ('Answer', 'F: Nem, nincs lehetőségem nyugodt körülmények között elvégezni a feladatot.    J: Igen, körülményeim nyugodtak, az internet kapcsolat stabil, a feladatokra tudok szánni 60 percet.'), ('CorrectResponse', 'j'), ('CorrectAnswer', 'Köszönjük!'), ('IncorrectAnswer', 'Bizonyosodjon meg róla, hogy elég időt tud a vizsgálatra szánni. '), ('InfoRepeated', 'Kérjük, figyelmesen olvassa végig az alábbi instrukciókat!\n\nA vizs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,
      OrderedDict([('Question', 'Mely billentyű jelzi azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen?'), ('Answer', 'D billentyű    F billentyű   J billentyű    K billentyű'), ('CorrectResponse', 'j'), ('CorrectAnswer', 'A helyes válasz: J billentyű.'), ('IncorrectAnswer', 'A helyes válasz: J billentyű.'), ('InfoRepeated', "Az első feladat nagyjából 20 percet vesz igénybe, közben két rövid szünettel. Ügyeljen, hogy ezek a szünetek ne legyenek 2 percnél hosszabbak. \n\nA 'J' billentyűvel jelölje azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen.\n\nAz 'F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,
      OrderedDict([('Question', 'Mely billentyű jelzi azokat a képeket, amelyek nem maradhatnak a bemutatott helyen?'), ('Answer', 'D billentyű    F billentyű   J billentyű    K billentyű'), ('CorrectResponse', 'f'), ('CorrectAnswer', 'A helyes válasz: F billentyű'), ('IncorrectAnswer', 'A helyes válasz: F billentyű'), ('InfoRepeated', "Az első feladat nagyjából 20 percet vesz igénybe, közben két rövid szünettel. Ügyeljen, hogy ezek a szünetek ne legyenek 2 percnél hosszabbak. \n\nA 'J' billentyűvel jelölje azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen.\n\nAz 'F' billentyűv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
    Routine comprehension_question
    Routine comprehension_feedback
    Routine comprehension_repeat
  LoopTerminator comprehension_end
  Routine end_experiment
